begin model
# FluBNF SIHRS-NATG: SIHRS_pop_min.bngl plus one exogenous national-growth
# factor on beta, no new fitted parameters:
#   beta_s(t) *= exp( iota * ( g_nat^{-s}(t) - g_s^obs(t) ) )
# (leave-one-out national minus own log-growth, built by flubnf/natgrowth.py
# from the as-of vintage; acts on growth, never level).
# PRE-REGISTERED AND FROZEN (MODEL-PROVENANCE 4): iota = 0.3020
# (IOTA_FROZEN), never a fitted var, never retuned. The last observed gap is
# HELD CONSTANT ACROSS THE 1 TO 4 WEEK HORIZON (natgap()'s last branch is
# unguarded); the gap is clipped to +-1.0 (GAP_CLIP), beta factor in [0.74, 1.35].
# Extra tokens IOTA, GAPEXPR, GAPNOTE (braces omitted: comments are token-scanned).
begin parameters

### -- transmission: scale-free reproduction number + seasonal forcing -- ###
Reff    Reff__FREE     # BASE reproduction number: harmonic-neutral, at the
                       # initial susceptible fraction s0; R0 = Reff/s0 post hoc
eps1    eps1__FREE     # annual-harmonic amplitude
phi1    phi1__FREE     # annual-harmonic phase (week of peak transmissibility)

### -- progression / removal -- ###
gamma   {{GAMMA}}      # FIXED: 7/3.2 d generation time, Chan 2024 doi:10.1101/2024.08.17.24312064
rho     {{RHO}}        # FIXED: true IHR branching fraction I->H; rules only,
                       # never the observable
mult    mult__FREE     # ascertainment, OBSERVATION-ONLY: it must never appear
                       # in a reaction rule; admissions identify only rho*mult
gammaH  {{GAMMAH}}     # FIXED: discharge; moves the census only, unidentifiable here
omega   {{OMEGA}}      # FIXED: waning R->S, weakly identified from <3 seasons

### -- observation noise -- ###
r       r__FREE        # negative-binomial dispersion (AMCMC)

### -- exogenous national growth: FIXED A PRIORI, never fitted -- ###
iota    {{IOTA}}       # FROZEN at 0.3020 (see header). Deliberately a plain
                       # parameter, never a *__FREE var (Law 1).

### -- derived -- ###
beta0   Reff*gamma/s0
pi      3.141592653589793  # avoid BNGL _pi(): bngsim codegen emits M_PI(), which will not compile

### -- FIXED per-state structural constants (known data, never fitted) -- ###
N       {{POP}}        # state population (absolute people)
s0      {{S0FRAC}}     # initial susceptible fraction; FIXED -- R0*s0 is product-identified
i0      {{I0FRAC}}     # initial infected fraction

end parameters

begin molecule types
S()         # susceptible people
I()         # infectious people
H()         # hospitalized census / occupancy
R()         # recovered / immune people
Hadm()      # cumulative admissions accumulator (never decays)
counter()   # clock: observable t = weeks
end molecule types

begin seed species
# Absolute counts. R(0) takes the remainder, so S+I+H+R = N exactly and
# pre-existing immunity (s0 < 1) is representable.
S() N*s0
I() N*i0
H() 0
R() N*(1-s0-i0)
Hadm() 0
counter() 0
end seed species

begin observables
Molecules S     S()
Molecules I     I()
Molecules H     H()        # census -- do NOT fit to an admissions target
Molecules R     R()
Molecules H_Cum Hadm()     # cumulative admissions; the weekly count is its change over the week
Molecules t     counter()
end observables

begin functions

### -- exogenous national-growth gap, piecewise-constant in t -- ###
# {{GAPNOTE}}
# Written by natgrowth.py::bngl_gap_expression; a week with no defined growth
# contributes 0.0, and the unguarded final branch IS the forecast rule above.
natgap() = {{GAPEXPR}}

### -- seasonal transmission rate (exp() keeps beta > 0) -- ###
# The ONLY change from SIHRS_pop_min.bngl; iota = 0 reduces to it exactly.
beta() = beta0*exp( eps1*cos(2*pi*(t-phi1)/52) )*exp( iota*natgap() )

### -- ascertained admission flux, an INSTANTANEOUS rate, not a weekly total -- ###
# kept as the name binding the .exp count column to a model output
H_weekly() = rho*mult*gamma*I

### -- the particle filter's fit target -- ###
# the engine differences this over each reporting week; the model owns
# its observation scale (pf_cumulative_observable in the conf)
Hobs() = mult*H_Cum

end functions

begin reaction rules
0 -> counter() 1
# infection, FREQUENCY-DEPENDENT: rate constant beta()/N -> flux beta*S*I/N
S() + I() -> I() + I()   beta()/N
I() -> H()   rho*gamma
I() -> R()   (1-rho)*gamma
H() -> R()   gammaH
R() -> S()   omega
# accumulator: tallies the I->H flux without consuming I, so S+I+H+R = N
I() -> I() + Hadm()   rho*gamma
end reaction rules

end model

begin actions
# inert for the particle filter (one-week windows); a ceiling for adaptive MCMC
generate_network({overwrite=>1})
simulate({suffix=>"SIHRS_flu",method=>"ode",t_start=>0,t_end=>48,n_steps=>48,print_functions=>1})
end actions
